CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:pHH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:Alpha_actinin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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enabled:False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
    Select the input image:pHH3
    Name the primary objects to be identified:Mitotic_cells
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EdU
    Name the primary objects to be identified:EdU
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Nuclei_ext
    Select the method to identify the secondary objects:Distance - B
    Select the input image:pHH3
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:EdU
    Name the objects to be identified:Edu_ext
    Select the method to identify the secondary objects:Distance - N
    Select the input image:EdU
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Nuclei_ext
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Edu_ext
    Select the smaller identified objects:EdU
    Name the tertiary objects to be identified:Cytoplasm_EdUpos
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Alpha_actinin, DNA, EdU, pHH3
    Select objects to measure:Cytoplasm, Cytoplasm_EdUpos, EdU, Nuclei

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Cytoplasm, Cytoplasm_EdUpos, EdU, Edu_ext, Nuclei, Nuclei_ext
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:14|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
    Parent objects:Nuclei_ext
    Child objects:EdU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:15|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
    Parent objects:Nuclei
    Child objects:EdU
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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enabled:False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
    Parent objects:Nuclei
    Child objects:Mitotic_cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:17|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:EdU
    Select outline color:green
    Select objects to display:Cytoplasm

SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Elsewhere...|F:\\Images\\23.05.01 imaging CMTM5 enhancer edu final\\crispri imaging\\plates 6 and 7 488.phh3.555edu.647alphaactinin\\ output\\results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|overlay_image
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    Save with lossless compression?:Yes

DisplayHistogram:[module_num:19|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enabled:False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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_IntegratedIntensity_DNA
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Integrated_intensity_DNA_at_Nuclei
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:20|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enabled:False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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_IntegratedIntensity_EdU
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Integrated_Intensity_Edu_at_Nuclei
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayScatterPlot:[module_num:21|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:Intensity_IntegratedIntensity_DNA
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_IntegratedIntensity_EdU
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Integrated intensity DNA vs EdU in Nuclei

DisplayScatterPlot:[module_num:22|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:Intensity_IntegratedIntensity_Ki67
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_IntegratedIntensity_EdU
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Mean intensity DNA vs EdU

ExportToDatabase:[module_num:23|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|F:\\Images\\23.05.01 imaging CMTM5 enhancer edu final\\crispri imaging\\plates 6 and 7 488.phh3.555edu.647alphaactinin\\ output\\results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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